PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data_retrieval/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = Mem_retrieval
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Routines
  Routine END
    TextComponent End_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        END OF THE TEST

        Please go get your experimenter

        THANK YOU
  Routine Examples
    ImageComponent example_image
      image [set every frame] = $stim1
      saveStartStop = False
      size = 1,1
      startVal [time (s)] = .5
      texture resolution = 512
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    KeyboardComponent example_key
      allowedKeys = 'v','n','V','N'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
      syncScreenRefresh = False
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    TextComponent text
      letterHeight = 0.07
      pos = (0, -.7)
      saveStartStop = False
      startVal [time (s)] = 0
      text = V = EXACT SAME    N = NEW / DIFFERENT
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  Routine StartScreen
    TextComponent start_text
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The test will now start

        This will take about 15 minutes

        There will be a break halfway through

        Any questions?

        Press the space bar to begin
    KeyboardComponent start_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instructions
    TextComponent Instructions
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Now we’ll be testing your memory for the images you saw earlier


        V = Exact same
        N = New / Different


        The image will be on the screen for 3 seconds. Be sure to respond while the image is on the screen.

        Press the space bar for examples
    KeyboardComponent instruction_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
      syncScreenRefresh = False
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  Routine test
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent Stimuli
      image [set every frame] = $Stim
      startVal [time (s)] = .5
      stopVal [duration (s)] = 3
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    KeyboardComponent Key_Response
      allowedKeys = 'n','v','V','N'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent text_4
      letterHeight = 0.07
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text = V = EXACT SAME    N = NEW / DIFFERENT
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  Routine Image
  Routine pic
    ImageComponent image
      image = example1.jpg
      saveStartStop = False
      size = 1,1
      startVal [time (s)] = 1
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, -.7)
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        Imagine this is an image you saw earlier
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine pause
    TextComponent Pause_text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You can take a quick break

        Instructions are the same

        V = Exact same
        N = New/Different

        Press the space bar to continue
    KeyboardComponent Space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine instructions
  Routine pic
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = example_test2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1 
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    conditions:
      [{'stim1': 'example1.jpg'},
      {'stim1': 'example1.jpg'},
      {'stim1': 'example2.png'},
      {'stim1': 'example3.jpg'}]
    Routine Examples
  LoopTerminator trials
  Routine StartScreen
  LoopInitiator Test loopType="TrialHandler"
    Selected rows = 0:121
    conditionsFile = StimData_test2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim': '01_H_101.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_102.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_103.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_104.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_105.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_106.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_107.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_108.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_L_101.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_102.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_103.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_104.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_105.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_106.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_107.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_108.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_H_201.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_202.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_203.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_204.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_205.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_206.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_207.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_208.jpg', 'StimType': 1, 'Memorability': 'H'}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
    Routine test
  LoopTerminator Test
  Routine pause
  LoopInitiator test2 loopType="TrialHandler"
    Selected rows = 121:242
    conditionsFile = StimData_test2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim': '01_H_101.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_102.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_103.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_104.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_105.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_106.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_107.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_108.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_L_101.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_102.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_103.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_104.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_105.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_106.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_107.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_L_108.jpg', 'StimType': 1, 'Memorability': 'L'},
      {'Stim': '01_H_201.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_202.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_203.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_204.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_205.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_206.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_207.jpg', 'StimType': 1, 'Memorability': 'H'},
      {'Stim': '01_H_208.jpg', 'StimType': 1, 'Memorability': 'H'}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
    Routine test
  LoopTerminator test2
  Routine END
